---
API: 3
OpenSesame: 4.1.0
Platform: nt
---
set width 1024
set title "New experiment"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend legacy
set keyboard_backend legacy
set height 768
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 18
set font_italic False
set font_family mono
set font_bold False
set experiment_path "C:/Users/kawyb/Desktop/L2 2K25/S3/Sciences cognitives"
set disable_garbage_collection False
set description "The main experiment item"
set color_backend legacy
set clock_backend legacy
set canvas_backend legacy
set background "#ffffff"

define sketchpad Consignes
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=23 html=yes show_if=True text="Dans cette expérience, un carré de couleur rouge ou verte apparaîtra à gauche ou à droite de l’écran.<br /><br />Votre tâche est d’indiquer le plus rapidement et le plus précisément possible la couleur du carré, en appuyant sur la touche correspondante sur le clavier.<br /><br />Appuyez sur la touche Q si le carré est rouge<br />Appuyez sur la touche M si le carré est vert<br /><br />La position du carré à l’écran n’est pas pertinente pour répondre : vous devez toujours répondre en fonction de sa couleur.<br /><br />Essayez de répondre le plus vite possible tout en évitant les erreurs.<br /><br />- Appuyez sur la barre d’espace pour commencer la phase d’entraînement. -" x=0.0 y=0.0 z_index=0

define sketchpad EndThanks
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=23 html=yes show_if=True text="Merci pour votre participation.<br /><br />L’expérience est maintenant terminée." x=0 y=0 z_index=0

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Consignes True
	run training_reset_feedback True
	run training_loop True
	run feedback True
	run test_loop True
	run EndThanks True

define feedback feedback
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=30 html=yes show_if=True text="Félicitations, vous avez terminé la phase d’entraînement.<br /><br />Votre précision moyenne était de [acc]%<br />Votre temps de réponse moyen était de [avg_rt] ms<br /><br />Appuyez sur la barre d’espace pour commencer l’expérience." x=0 y=32 z_index=0

define sketchpad fp_sketchpad
	set duration 750
	set description "Displays stimuli"
	draw fixdot color="#000000" show_if=True style=default x=0 y=0 z_index=0

define keyboard_response keyboard_response
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "q;m"

define logger logger
	set description "Logs experimental data"
	set auto_log yes

define sampler sampler
	set volume 1
	set stop_after 0
	set sample "error-126627.ogg"
	set pitch 1
	set pan 0
	set fade_in 0
	set duration sound
	set description "Plays a sound file in .wav or .ogg format"

define sketchpad target_sketchpad
	set duration 100
	set description "Displays stimuli"
	draw rect color="[color]" fill=1 h=64 penwidth=1 show_if=True w=64 x="[x_pos]" y=-32 z_index=0

define loop test_loop
	set source table
	set repeat 10
	set order random
	set description "Repeatedly runs another item"
	set cycles 16
	set continuous no
	set break_if_on_first yes
	set break_if False
	setcycle 0 color "#ff000e"
	setcycle 0 x_pos -300
	setcycle 0 correct_response q
	setcycle 0 compatibility compatible
	setcycle 1 color "#ff000e"
	setcycle 1 x_pos -300
	setcycle 1 correct_response q
	setcycle 1 compatibility compatible
	setcycle 2 color "#ff000e"
	setcycle 2 x_pos -300
	setcycle 2 correct_response q
	setcycle 2 compatibility compatible
	setcycle 3 color "#ff000e"
	setcycle 3 x_pos -300
	setcycle 3 correct_response q
	setcycle 3 compatibility compatible
	setcycle 4 color "#0eff30"
	setcycle 4 x_pos 300
	setcycle 4 correct_response m
	setcycle 4 compatibility compatible
	setcycle 5 color "#0eff30"
	setcycle 5 x_pos 300
	setcycle 5 correct_response m
	setcycle 5 compatibility compatible
	setcycle 6 color "#0eff30"
	setcycle 6 x_pos 300
	setcycle 6 correct_response m
	setcycle 6 compatibility compatible
	setcycle 7 color "#0eff30"
	setcycle 7 x_pos 300
	setcycle 7 correct_response m
	setcycle 7 compatibility compatible
	setcycle 8 color "#ff000e"
	setcycle 8 x_pos -300
	setcycle 8 correct_response q
	setcycle 8 compatibility compatible
	setcycle 9 color "#0eff30"
	setcycle 9 x_pos 300
	setcycle 9 correct_response m
	setcycle 9 compatibility compatible
	setcycle 10 color "#ff000e"
	setcycle 10 x_pos -300
	setcycle 10 correct_response q
	setcycle 10 compatibility compatible
	setcycle 11 color "#0eff30"
	setcycle 11 x_pos 300
	setcycle 11 correct_response m
	setcycle 11 compatibility compatible
	setcycle 12 color "#ff000e"
	setcycle 12 x_pos 300
	setcycle 12 correct_response q
	setcycle 12 compatibility incompatible
	setcycle 13 color "#ff000e"
	setcycle 13 x_pos 300
	setcycle 13 correct_response q
	setcycle 13 compatibility incompatible
	setcycle 14 color "#0eff30"
	setcycle 14 x_pos -300
	setcycle 14 correct_response m
	setcycle 14 compatibility incompatible
	setcycle 15 color "#0eff30"
	setcycle 15 x_pos -300
	setcycle 15 correct_response m
	setcycle 15 compatibility incompatible
	run test_sequence

define sequence test_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run fp_sketchpad True
	run target_sketchpad True
	run keyboard_response True
	run sampler "[correct]=0"
	run logger True

define loop training_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 16
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 color "#ff000e"
	setcycle 0 x_pos -300
	setcycle 0 correct_response q
	setcycle 0 compatibility compatible
	setcycle 1 color "#ff000e"
	setcycle 1 x_pos -300
	setcycle 1 correct_response q
	setcycle 1 compatibility compatible
	setcycle 2 color "#ff000e"
	setcycle 2 x_pos -300
	setcycle 2 correct_response q
	setcycle 2 compatibility compatible
	setcycle 3 color "#ff000e"
	setcycle 3 x_pos -300
	setcycle 3 correct_response q
	setcycle 3 compatibility compatible
	setcycle 4 color "#0eff30"
	setcycle 4 x_pos 300
	setcycle 4 correct_response m
	setcycle 4 compatibility compatible
	setcycle 5 color "#0eff30"
	setcycle 5 x_pos 300
	setcycle 5 correct_response m
	setcycle 5 compatibility compatible
	setcycle 6 color "#0eff30"
	setcycle 6 x_pos 300
	setcycle 6 correct_response m
	setcycle 6 compatibility compatible
	setcycle 7 color "#0eff30"
	setcycle 7 x_pos 300
	setcycle 7 correct_response m
	setcycle 7 compatibility compatible
	setcycle 8 color "#ff000e"
	setcycle 8 x_pos -300
	setcycle 8 correct_response q
	setcycle 8 compatibility compatible
	setcycle 9 color "#0eff30"
	setcycle 9 x_pos 300
	setcycle 9 correct_response m
	setcycle 9 compatibility compatible
	setcycle 10 color "#ff000e"
	setcycle 10 x_pos -300
	setcycle 10 correct_response q
	setcycle 10 compatibility compatible
	setcycle 11 color "#0eff30"
	setcycle 11 x_pos 300
	setcycle 11 correct_response m
	setcycle 11 compatibility compatible
	setcycle 12 color "#ff000e"
	setcycle 12 x_pos 300
	setcycle 12 correct_response q
	setcycle 12 compatibility incompatible
	setcycle 13 color "#ff000e"
	setcycle 13 x_pos 300
	setcycle 13 correct_response q
	setcycle 13 compatibility incompatible
	setcycle 14 color "#0eff30"
	setcycle 14 x_pos -300
	setcycle 14 correct_response m
	setcycle 14 compatibility incompatible
	setcycle 15 color "#0eff30"
	setcycle 15 x_pos -300
	setcycle 15 correct_response m
	setcycle 15 compatibility incompatible
	run training_sequence

define reset_feedback training_reset_feedback
	set description "A very simple plug-in to reset feedback variables"

define sequence training_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run fp_sketchpad True
	run target_sketchpad True
	run keyboard_response True
	run sampler "[correct]=0"
	run logger True

